---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1366
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set jatos_uuid "bb62da40-6379-aec2-b94f-7defe1f953b5"
set height 768
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\erdis\\OneDrive\\Documents\\Experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background "#000000"

define form_text_display calisma_asamasi_son
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Devam
	set margins "50;50;50;50"
	set form_title "Çalışma aşaması bitmiştir"
	__form_text__
	Bir sonraki aşamaya geçmek için "Devam" tuşuna basınız.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop composites
	set source_file "data_img-DESKTOP-L1OVD75.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 0
	set continuous no
	set break_if_on_first yes
	set break_if False
	run step_study

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started True
	run study_instructions True
	run study_task True
	run interval_instructions True
	run interval_task True

define sketchpad fixation_dot_interval
	set duration 1500
	set description "Displays stimuli"
	draw fixdot color="#ffffff" show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation_dot_study
	set duration 1500
	set description "Displays stimuli"
	draw fixdot color="#ffffff" show_if=True style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad images
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[img_name]" scale=1 show_if=True x=0 y=0 z_index=0

define loop interval
	set source_file "interval_test.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 0
	set continuous no
	set break_if_on_first yes
	set break_if False
	run step_interval

define form_text_display interval_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Başla"
	set margins "50;50;50;50"
	set form_title "Ara Görev Aşaması"
	__form_text__
	Bilgisayar ekranında yan yana iki adet örüntü göreceksiniz. Bu örüntüler birbirinin aynısı ise klavyede “F” tuşuna, birbirinden farklı ise “J” tuşuna olabildiğince hızlı ve doğru bir biçimde basmalısınız. Hazır olduğunuzda "Başla" tuşuna basarak başlayabilirsiniz.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence interval_task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot_interval True
	run interval True

define sketchpad labeling
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(1) İğrenme" x=-544.0 y=0.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(2) Öfke" x=-320.0 y=0.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(3) Korku" x=-128.0 y=0.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(4) Üzüntü" x=64.0 y=0.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(5) Mutluluk" x=288.0 y=0.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(6) Şaşkınlık" x=544.0 y=0.0 z_index=0

define sketchpad patterns
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[imgName1]" scale=0.6000000000000001 show_if=True x=-256 y=0 z_index=0
	draw image center=1 file="[imgName2]" scale=0.6000000000000001 show_if=True x=256 y=0 z_index=0

define sequence step_interval
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run patterns True

define sequence step_study
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run images True
	run labeling True

define form_text_display study_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Başla"
	set margins "50;50;50;50"
	set form_title "Çalışma Aşaması"
	__form_text__
	Bilgisayar ekranında çeşitli yüz ifadeleri göreceksiniz. Her bir yüz ifadesinin altında bulunan duygu etiketleri listesinden (iğrenme, öfke, korku, üzüntü, mutluluk, şaşkınlık) uygun olanı seçerek yüz ifadesinin belirttiği duyguyu tanımlamanız istenecektir. Yüz ifadesinin belirttiği duyguyu tanımladıktan sonra başka bir yüz ifadesine geçilecektir. Bir sonraki bellek testi için bu görünen yüz ifadelerini hatırlamanız gerekecektir. Hazır olduğunuzda aşağıdaki "Başla" tuşuna basarak başlayabilirsiniz.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence study_task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot_study True
	run composites True
	run calisma_asamasi_son True

