---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1366
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set jatos_uuid "bb62da40-6379-aec2-b94f-7defe1f953b5"
set height 768
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\aligo\\Downloads\\memory\\memory\\Experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background "#000000"

define sketchpad Face_img
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[Face_location]" scale=0.30000000000000004 show_if=True x=0 y=-160 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Bu yüzü daha önce gördünüz mü?" x=0 y=160 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="(F) Evet" x=-192 y=256 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="(J) Hayır" x=224 y=256 z_index=0

define form_text_display calisma_asamasi_son
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Devam
	set margins "50;50;50;50"
	set form_title "Çalışma aşaması bitmiştir"
	__form_text__
	Bir sonraki aşamaya geçmek için "Devam" tuşuna basınız.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop composites
	set source_file "data_img-DESKTOP-L1OVD75.csv"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\anger-anger\\L-Scenes\\getimg_ai-2024-06-22T17_32_18.569Z.png"
	setcycle 1 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\anger-anger\\L-Scenes\\getimg_ai-2024-06-22T17_33_05.706Z.png"
	setcycle 2 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\anger-anger\\R-Scenes\\getimg_ai-2024-06-22T17_36_31.004Z.png"
	setcycle 3 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\anger-anger\\R-Scenes\\getimg_ai-2024-06-22T17_38_28.010Z.png"
	setcycle 4 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\disgust-disgust\\L-Scenes\\getimg_ai-2024-06-22T17_40_27.700Z.png"
	setcycle 5 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\disgust-disgust\\L-Scenes\\getimg_ai-2024-06-22T17_41_03.477Z.png"
	setcycle 6 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\disgust-disgust\\R-Scenes\\getimg_ai-2024-06-22T17_45_19.934Z.png"
	setcycle 7 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\disgust-disgust\\R-Scenes\\getimg_ai-2024-06-22T17_47_04.190Z.png"
	setcycle 8 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\fear-fear\\L-Scenes\\getimg_ai-2024-06-22T17_49_21.104Z.png"
	setcycle 9 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\fear-fear\\L-Scenes\\getimg_ai-2024-10-09T12_30_17.659Z.png"
	setcycle 10 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\fear-fear\\R-Scenes\\getimg_ai-2024-06-22T17_51_19.758Z.png"
	setcycle 11 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\fear-fear\\R-Scenes\\getimg_ai-2024-06-22T17_52_48.090Z.png"
	setcycle 12 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\sad-sad\\L-Scenes\\getimg_ai-2024-06-22T18_27_05.926Z.png"
	setcycle 13 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\sad-sad\\L-Scenes\\getimg_ai-2024-06-22T18_30_42.811Z.png"
	setcycle 14 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\sad-sad\\R-Scenes\\getimg_ai-2024-10-09T13_35_52.641Z.png"
	setcycle 15 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Congruent\\sad-sad\\R-Scenes\\getimg_ai-2024-10-09T13_37_27.966Z.png"
	setcycle 16 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\anger-disgust\\L-Scenes\\getimg_ai-2024-06-22T18_47_09.707Z.png"
	setcycle 17 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\anger-disgust\\L-Scenes\\getimg_ai-2024-06-22T19_35_29.320Z.png"
	setcycle 18 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\anger-disgust\\R-Scenes\\getimg_ai-2024-06-22T19_36_49.474Z.png"
	setcycle 19 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\anger-disgust\\R-Scenes\\getimg_ai-2024-06-22T19_38_21.772Z.png"
	setcycle 20 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-anger\\L-Scenes\\getimg_ai-2024-06-22T19_47_21.641Z.png"
	setcycle 21 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-anger\\L-Scenes\\getimg_ai-2024-10-09T17_41_48.325Z.png"
	setcycle 22 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-anger\\R-Scenes\\getimg_ai-2024-06-22T19_50_28.677Z.png"
	setcycle 23 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-anger\\R-Scenes\\getimg_ai-2024-10-09T17_47_42.706Z.png"
	setcycle 24 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-sad\\L-Scenes\\getimg_ai-2024-06-22T19_55_09.196Z.png"
	setcycle 25 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-sad\\L-Scenes\\getimg_ai-2024-06-22T19_55_45.062Z.png"
	setcycle 26 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-sad\\R-Scenes\\getimg_ai-2024-06-22T19_59_27.745Z.png"
	setcycle 27 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\disgust-sad\\R-Scenes\\getimg_ai-2024-10-09T18_08_56.328Z.png"
	setcycle 28 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\sad-disgust\\L-Scenes\\getimg_ai-2024-06-23T05_14_59.100Z.png"
	setcycle 29 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\sad-disgust\\L-Scenes\\getimg_ai-2024-06-23T05_18_23.149Z.png"
	setcycle 30 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\sad-disgust\\R-Scenes\\getimg_ai-2024-06-23T05_21_57.889Z.png"
	setcycle 31 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\High\\sad-disgust\\R-Scenes\\getimg_ai-2024-06-23T05_22_45.807Z.png"
	setcycle 32 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-fear\\L-Scenes\\getimg_ai-2024-06-23T05_26_38.535Z.png"
	setcycle 33 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-fear\\L-Scenes\\getimg_ai-2024-10-09T18_28_41.531Z.png"
	setcycle 34 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-fear\\R-Scenes\\getimg_ai-2024-06-23T05_30_22.518Z.png"
	setcycle 35 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-fear\\R-Scenes\\getimg_ai-2024-10-21T18_28_01.746Z.png"
	setcycle 36 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-sad\\L-Scenes\\getimg_ai-2024-06-23T05_33_32.017Z.png"
	setcycle 37 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-sad\\L-Scenes\\getimg_ai-2024-06-23T05_34_18.986Z.png"
	setcycle 38 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-sad\\R-Scenes\\getimg_ai-2024-06-23T05_35_35.419Z.png"
	setcycle 39 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\anger-sad\\R-Scenes\\getimg_ai-2024-06-23T05_36_15.347Z.png"
	setcycle 40 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\fear-anger\\L-Scenes\\getimg_ai-2024-06-23T05_39_31.800Z.png"
	setcycle 41 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\fear-anger\\L-Scenes\\getimg_ai-2024-10-09T18_41_19.839Z.png"
	setcycle 42 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\fear-anger\\R-Scenes\\getimg_ai-2024-06-23T05_41_57.314Z.png"
	setcycle 43 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\fear-anger\\R-Scenes\\getimg_ai-2024-06-23T05_42_35.302Z.png"
	setcycle 44 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\sad-anger\\L-Scenes\\getimg_ai-2024-06-23T05_44_46.216Z.png"
	setcycle 45 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\sad-anger\\L-Scenes\\getimg_ai-2024-10-09T19_13_57.524Z.png"
	setcycle 46 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\sad-anger\\R-Scenes\\getimg_ai-2024-06-23T05_46_47.106Z.png"
	setcycle 47 img_name "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Composites\\Young\\Low\\sad-anger\\R-Scenes\\getimg_ai-2024-06-23T05_48_15.987Z.png"
	run step_study

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started True
	run study_instructions True
	run study_task True
	run interval_instructions True
	run interval_task True
	run test_instructions True
	run test_task True
	run experiment_end True

define form_text_display experiment_end
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Tamam
	set margins "50;50;50;50"
	set form_title "Deney Sona Ermiştir"
	set form_text "Katılımınız için teşekkür ederiz."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define keyboard_response face_key_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "F;J"

define sketchpad fixation_dot_interval
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color="#ffffff" show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation_dot_study
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color="#ffffff" show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation_dot_test
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color="#ffffff" show_if=True style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define keyboard_response image_key_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3"

define sketchpad images
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[img_name]" scale=1 show_if=True x=0 y=0 z_index=0

define loop interval
	set source_file "interval_test.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 0
	set continuous no
	set break_if_on_first yes
	set break_if False
	run step_interval

define form_text_display interval_end
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Devam
	set margins "50;50;50;50"
	set form_title "Ara Görev Aşaması Bitmiştir"
	__form_text__
	Bir sonraki aşamaya geçmek için "Devam" tuşuna basınız.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_display interval_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Başla"
	set margins "50;50;50;50"
	set form_title "Ara Görev Aşaması"
	__form_text__
	Bilgisayar ekranında yan yana iki adet örüntü göreceksiniz. Bu örüntüler birbirinin aynısı ise klavyede “F” tuşuna, birbirinden farklı ise “J” tuşuna olabildiğince hızlı ve doğru bir biçimde basmalısınız. Hazır olduğunuzda "Başla" tuşuna basarak başlayabilirsiniz.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence interval_task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot_interval True
	run interval True
	run interval_end True

define sketchpad labeling
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(1) İğrenme" x=-544 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(2) Öfke" x=-320 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(3) Korku" x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(4) Üzüntü" x=64 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(5) Mutluluk" x=288 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="(6) Şaşkınlık" x=544 y=0 z_index=0

define logger new_logger
	set description "Logs experimental data"
	set auto_log no
	log isSeen
	log response_face_key_response
	log response_image_key_response
	log intactImageLocation

define sketchpad patterns
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[imgName1]" scale=0.6 show_if=True x=-256 y=0 z_index=0
	draw image center=1 file="[imgName2]" scale=0.6000000000000001 show_if=True x=256 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="(F) Aynı" x=-128 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="(J) Farklı" x=128 y=320 z_index=0

define sketchpad sketchpad
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[img1]" scale=0.30000000000000004 show_if=True x=-544 y=192 z_index=0
	draw image center=1 file="[img2]" scale=0.30000000000000004 show_if=True x=0 y=192 z_index=0
	draw image center=1 file="[img3]" scale=0.3 show_if=True x=544 y=192 z_index=0
	draw image center=1 file="[Face_location]" scale=0.3 show_if=True x=0 y=-288 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="(1)" x=-544 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="(2)" x=0 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="(3)" x=544 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Yukarıda gördüğünüz yüzün arka planında hangi resim vardı?" x=0 y=-64 z_index=0

define inline_script skip_question_logic
	set description "Executes Python code"
	___run__
	if var.response == 'j' or var.response == 'J' or var.isSeen == "FALSE":  
	    var.skip_step_2 = True
	else:
	    var.skip_step_2 = False
	__end__
	set _prepare ""

define sequence step_interval
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run patterns True

define sequence step_study
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot_study True
	run images True
	run labeling True

define sequence step_test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot_test True
	run Face_img True
	run face_key_response True
	run skip_question_logic True
	run sketchpad "var.skip_step_2 == False"
	run image_key_response "var.skip_step_2 == False"
	run new_logger True

define form_text_display study_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Başla"
	set margins "50;50;50;50"
	set form_title "Çalışma Aşaması"
	__form_text__
	Bilgisayar ekranında çeşitli yüz ifadeleri göreceksiniz. Her bir yüz ifadesinin altında bulunan duygu etiketleri listesinden (iğrenme, öfke, korku, üzüntü, mutluluk, şaşkınlık) uygun olanı seçerek yüz ifadesinin belirttiği duyguyu tanımlamanız istenecektir. Yüz ifadesinin belirttiği duyguyu tanımladıktan sonra başka bir yüz ifadesine geçilecektir. Bir sonraki bellek testi için bu görünen yüz ifadelerini hatırlamanız gerekecektir. Hazır olduğunuzda aşağıdaki "Başla" tuşuna basarak başlayabilirsiniz.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence study_task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run composites True
	run calisma_asamasi_son True

define loop test
	set source_file "data_img.xlsx"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 isSeen TRUE
	setcycle 0 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(1) - Copy\\0_Face\\getimg_ai-2024-04-29T19_30_44.795Z.png"
	setcycle 0 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(1) - Copy\\1_Intact\\img-NloyUUcOPwLgiBWzFzLJA_new.png"
	setcycle 0 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(1) - Copy\\3_New\\img-MtqnSm3uwvK31RF9TAHAR_new.png"
	setcycle 0 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(1) - Copy\\2_Rearranged\\img-seGqsG6h2mFs8ttHjKhhW_new.png"
	setcycle 0 intactImageLocation 1
	setcycle 1 isSeen TRUE
	setcycle 1 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(10) - Copy\\0_Face\\getimg_ai-2024-10-09T12_28_16.250Z.png"
	setcycle 1 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(10) - Copy\\1_Intact\\img-1CPMVXs0jM1dEMdDIP2cy_new.jpeg"
	setcycle 1 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(10) - Copy\\2_Rearranged\\img-CSrsINJ6rYRGar1WlGCNw_new.jpeg"
	setcycle 1 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(10) - Copy\\3_New\\img-tg36OBl03pHhNZptPap50_new.jpeg"
	setcycle 1 intactImageLocation 1
	setcycle 2 isSeen TRUE
	setcycle 2 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(11) - Copy\\0_Face\\getimg_ai-2024-04-29T22_09_44.955Z.png"
	setcycle 2 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(11) - Copy\\2_Rearranged\\img-Ds5p1Iaa9jrQFwKj1RG8H_new.jpeg"
	setcycle 2 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(11) - Copy\\3_New\\img-iZYx64Is0hB6CP6DNCUpY_new.jpeg"
	setcycle 2 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(11) - Copy\\1_Intact\\img-vWF0yUj2c0cFyc6dnFzXN_new.png"
	setcycle 2 intactImageLocation 3
	setcycle 3 isSeen TRUE
	setcycle 3 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(12) - Copy\\0_Face\\getimg_ai-2024-04-29T22_05_48.539Z.png"
	setcycle 3 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(12) - Copy\\1_Intact\\img-CSrsINJ6rYRGar1WlGCNw_new.jpeg"
	setcycle 3 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(12) - Copy\\3_New\\img-HJDLnnOos75ufIr39ei4s_new.jpeg"
	setcycle 3 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(12) - Copy\\2_Rearranged\\img-1CPMVXs0jM1dEMdDIP2cy_new.jpeg"
	setcycle 3 intactImageLocation 1
	setcycle 4 isSeen TRUE
	setcycle 4 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(13) - Copy\\0_Face\\getimg_ai-2024-10-09T13_27_16.253Z.png"
	setcycle 4 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(13) - Copy\\1_Intact\\1713282491938_new.jpeg"
	setcycle 4 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(13) - Copy\\2_Rearranged\\img-fVcvtuyp3oTzTwrLwoCzJ_new.png"
	setcycle 4 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(13) - Copy\\3_New\\getimg_ai_img-ztpFVg5nAXZdu5dpMJ4Ie_new.png"
	setcycle 4 intactImageLocation 1
	setcycle 5 isSeen TRUE
	setcycle 5 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(14) - Copy\\0_Face\\getimg_ai-2024-10-09T13_24_29.399Z.png"
	setcycle 5 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(14) - Copy\\3_New\\getimg_ai_img-IolQ0wcTF4d5gSBPfjf2F_new.png"
	setcycle 5 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(14) - Copy\\2_Rearranged\\img-NwvqvKXaBjNRy3pT9gtLx_new.jpeg"
	setcycle 5 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(14) - Copy\\1_Intact\\img-e7m38HY25gIpaQFLZA9gt_new.png"
	setcycle 5 intactImageLocation 3
	setcycle 6 isSeen TRUE
	setcycle 6 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(15) - Copy\\0_Face\\getimg_ai-2024-10-09T13_29_24.405Z.png"
	setcycle 6 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(15) - Copy\\2_Rearranged\\img-HGzLFAoSJTlTjBGURQwVN_new.png"
	setcycle 6 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(15) - Copy\\1_Intact\\getimg_ai_img-6Ynmm5BTjs29W0LkpKoi7_new.png"
	setcycle 6 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(15) - Copy\\3_New\\92e9eff058d12890b7dcb8414b4e794e_new.jpeg"
	setcycle 6 intactImageLocation 2
	setcycle 7 isSeen TRUE
	setcycle 7 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(16) - Copy\\0_Face\\getimg_ai-2024-10-09T12_40_49.442Z.png"
	setcycle 7 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(16) - Copy\\3_New\\img-jLJ0V1b8xJzCk6o4mPCsj_new.png"
	setcycle 7 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(16) - Copy\\2_Rearranged\\img-PLl8wQ09NsYwFaCfF646P_new.png"
	setcycle 7 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces Scenes - Kopya\\Young\\FS_(16) - Copy\\1_Intact\\img-fFgMu8JBoFpIxIkK4GA72_new.png"
	setcycle 7 intactImageLocation 3
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	setcycle 48 isSeen FALSE
	setcycle 48 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\Anger\\getimg_ai_img-40M8AiN231hKvWnyJyHP6_new.png"
	setcycle 48 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 48 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 48 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 48 intactImageLocation 3
	setcycle 49 isSeen FALSE
	setcycle 49 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\Anger\\getimg_ai_img-4rSQIjuYdhWu8EDmgiXmc_new.png"
	setcycle 49 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 49 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 49 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 49 intactImageLocation 2
	setcycle 50 isSeen FALSE
	setcycle 50 Face_location "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\Anger\\getimg_ai_img-a36PmFAGE3ezIGhaZRkSI_new.png"
	setcycle 50 img1 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 50 img2 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 50 img3 "C:\\Users\\aligo\\Downloads\\memory\\memory\\z(2)_backed_up - Copy\\Faces (not used)_copy\\Young\\pngtree-gray-network-placeholder-png-image_3416659_new.jpg"
	setcycle 50 intactImageLocation 1
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	run step_test

define form_text_display test_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Başla"
	set margins "50;50;50;50"
	set form_title "Test Aşaması"
	set form_text ""
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence test_task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run test True

